WorkflowBuilder(Version=2.8.0)
Disable GroupWorkflow Optogenetics2
    SubscribeSubject WaveForm1_1 => #0
    SubscribeSubject WaveForm1_2 => #1
    #0, #1 -> Zip
    -> Bonsai.Dsp.Concat(Axis=0) => #3
    SubscribeSubject Location1Size
    -> PropertyMapping(BufferSize) => #5
    SubscribeSubject TriggerSource
    -> PropertyMapping(TriggerSource) => #7
    #3, #5, #7 -> SelectMany
        WorkflowInput Source1 => #0
        ExternalizedMapping(BufferSize, TriggerSource) => #1
        Source2=#0, Source2=#1 -> Bonsai.DAQmx.TriggeredAnalogOutput
          SignalSource=""
          TriggerSource=/Dev1/PFI0
          SampleRate=5000
          ActiveEdge=Rising
          SampleMode=FiniteSamples
          BufferSize=50002
          Channels
            AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts)
            AnalogOutputChannelConfiguration(ChannelName="", MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao1, VoltageUnits=Volts)
        -> IntProperty(Value=1)
        -> Bonsai.Osc.Format(Address=/FinishOfWave1_1)
        -> MulticastSubject ToBonsaiOSC4
        -> WorkflowOutput

    SubscribeSubject OptogeneticsCalibration
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO0Payload(PulseDO0=1))
    -> MulticastSubject BehaviorCommands
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=None))
    -> MulticastSubject BehaviorCommands

GroupWorkflow Parameters
    GroupWorkflow ReadFromOsc
        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/LeftValueSize, TypeTag=f)
        -> BehaviorSubject LeftValueSize

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/RightValueSize, TypeTag=f)
        -> BehaviorSubject RightValueSize

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/RewardConsumeTime, TypeTag=f)
        -> BehaviorSubject RewardConsumeTime

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Left_Bait, TypeTag=i)
        -> Equal(Operand=IntProperty(Value=1))
        -> BehaviorSubject IsLeftRewarded

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Right_Bait, TypeTag=i)
        -> Equal(Operand=IntProperty(Value=1))
        -> BehaviorSubject IsRightRewarded

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/start, TypeTag=i)
        -> PublishSubject Start

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/ITI, TypeTag=f)
        -> BehaviorSubject ITI

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/DelayTime, TypeTag=f)
        -> BehaviorSubject DelayTime

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/ResponseTime, TypeTag=f)
        -> BehaviorSubject ResponseTime

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerITIStart_Wave1, TypeTag=i)
        -> Disable PublishSubject TriggerITIStart_Wave1

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerITIStart_Wave2, TypeTag=i)
        -> Disable PublishSubject TriggerITIStart_Wave2

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Trigger_Location1, TypeTag=i)
        -> PublishSubject Trigger_Location1

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Trigger_Location2, TypeTag=i)
        -> PublishSubject Trigger_Location2

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerGoCue_Wave1, TypeTag=i)
        -> Disable PublishSubject TriggerGoCue_Wave1

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/TriggerGoCue_Wave2, TypeTag=i)
        -> Disable PublishSubject TriggerGoCue_Wave2

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/Location1Size, TypeTag=i)
        -> PublishSubject Location1Size

        Disable SubscribeSubject FromBonsaiOSC
        -> Disable Bonsai.Osc.Parse(Address=/Location2Size, TypeTag=i)
        -> Disable PublishSubject Location2Size

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/TriggerSource, TypeTag=s)
        -> PublishSubject TriggerSource

        SubscribeSubject FromBonsaiOSC4
        -> Bonsai.Osc.Parse(Address=/WaveForm1_1, TypeTag=s)
        -> Parse(Pattern=%f, Separator=",")
        -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Bonsai.Dsp.Reshape(Channels=1, Rows=1)
        -> BehaviorSubject WaveForm1_1

        Disable SubscribeSubject FromBonsaiOSC4
        -> Disable Bonsai.Osc.Parse(Address=/WaveForm2_1, TypeTag=s)
        -> Disable Parse(Pattern=%f, Separator=",")
        -> Disable Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Disable Bonsai.Dsp.Reshape(Channels=0, Rows=1)
        -> Disable BehaviorSubject WaveForm2_1

        SubscribeSubject FromBonsaiOSC4
        -> Bonsai.Osc.Parse(Address=/WaveForm1_2, TypeTag=s)
        -> Parse(Pattern=%f, Separator=",")
        -> Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Bonsai.Dsp.Reshape(Channels=0, Rows=1)
        -> BehaviorSubject WaveForm1_2

        Disable SubscribeSubject FromBonsaiOSC4
        -> Disable Bonsai.Osc.Parse(Address=/WaveForm2_2, TypeTag=s)
        -> Disable Parse(Pattern=%f, Separator=",")
        -> Disable Bonsai.Dsp.ConvertFromArray(Size(Width=0, Height=0), Depth=F32, Channels=1)
        -> Disable Bonsai.Dsp.Reshape(Channels=0, Rows=1)
        -> Disable BehaviorSubject WaveForm2_2

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/ManualWater_Left, TypeTag=i)
        -> PublishSubject ManualWater_Left

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/ManualWater_Right, TypeTag=i)
        -> PublishSubject ManualWater_Right

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/OptogeneticsCalibration, TypeTag=i)
        -> PublishSubject OptogeneticsCalibration

        SubscribeSubject FromBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/LeftValueSize1, TypeTag=f)
        -> BehaviorSubject LeftValueSize1

        SubscribeSubject ToBonsaiOSC3
        -> Bonsai.Osc.Parse(Address=/RightValueSize1, TypeTag=f)
        -> BehaviorSubject RightValueSize1

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/cameracontrol, TypeTag=i)
        -> PublishSubject Cameracontrol

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/camerafrequency, TypeTag=i)
        -> PublishSubject Camerafrequency

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/sidecamerafile, TypeTag=s)
        -> PublishSubject Sidecamerafile

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/bottomcamerafile, TypeTag=s)
        -> PublishSubject Bottomcamerafile

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/sidecameracsv, TypeTag=s)
        -> PublishSubject Sidecameracsv

        SubscribeSubject FromBonsaiOSC
        -> Bonsai.Osc.Parse(Address=/bottomcameracsv, TypeTag=s)
        -> PublishSubject Bottomcameracsv

    GroupWorkflow WriteToOsc
        SubscribeSubject RightLickTime
        -> Bonsai.Osc.Format(Address=/RightLickTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject LeftLickTime
        -> Bonsai.Osc.Format(Address=/LeftLickTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject Start => #6
        SubscribeSubject Timestamps => #7
        #6, #7 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/TrialStartTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject DelayStart => #13
        SubscribeSubject Timestamps => #14
        #13, #14 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/DelayStartTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject GoCue => #20
        SubscribeSubject Timestamps => #21
        #20, #21 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/GoCueTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject RewardOutcome => #27
        SubscribeSubject Timestamps => #28
        #27, #28 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/RewardOutcomeTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject TrialEnd => #34
        SubscribeSubject Timestamps => #35
        #34, #35 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/TrialEndTime)
        -> MulticastSubject ToBonsaiOSC

        SubscribeSubject RewardDeliveryRight => #41
        SubscribeSubject Timestamps => #42
        #41, #42 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/RightRewardDeliveryTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject RewardDeliveryLeft => #48
        SubscribeSubject Timestamps => #49
        #48, #49 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Bonsai.Osc.Format(Address=/LeftRewardDeliveryTime)
        -> MulticastSubject ToBonsaiOSC2

        SubscribeSubject RewardOutcome
        -> Bonsai.Osc.Format(Address=/RewardOutcome)
        -> MulticastSubject ToBonsaiOSC

        Disable SubscribeSubject RightKeyPress => #58
        Disable SubscribeSubject Timestamps => #59
        #58, #59 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Disable Bonsai.Osc.Format(Address=/RightLickTime)
        -> Disable MulticastSubject ToBonsaiOSC2

        Disable SubscribeSubject LeftKeyPress => #65
        Disable SubscribeSubject Timestamps => #66
        #65, #66 -> Disable WithLatestFrom
        -> Disable MemberSelector(Selector=Item2)
        -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it as Seconds)
        -> Disable Bonsai.Osc.Format(Address=/LeftLickTime)
        -> Disable MulticastSubject ToBonsaiOSC2

GroupWorkflow HardwareInputs
    BehaviorSubject<Bonsai.Harp.HarpMessage> BehaviorCommands
    -> Bonsai.Harp.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM30)
    -> PublishSubject BehaviorEvents

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedAnalogData)
    -> MemberSelector(Selector=Seconds)
    -> BehaviorSubject Timestamps

    Disable Bonsai.Windows.Input.KeyDown(Filter=L, SuppressRepetitions=false)
    -> Disable PublishSubject LeftKeyPress
    -> Disable StringProperty(Value=Left) => #9
    Disable Bonsai.Windows.Input.KeyDown(Filter=R, SuppressRepetitions=false)
    -> Disable PublishSubject RightKeyPress
    -> Disable StringProperty(Value=Right) => #12
    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #14
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort0))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #19
        WorkflowInput Source1
        -> WorkflowOutput
    #19, #14 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> PublishSubject LeftLickTime
    -> StringProperty(Value=Left) => #23
    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #25
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DIPort1))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #30
        WorkflowInput Source1
        -> WorkflowOutput
    #30, #25 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> PublishSubject RightLickTime
    -> StringProperty(Value=Right) => #34
    #9, #12, #23, #34 -> Merge
    -> PublishSubject Licks

GroupWorkflow "Hardware Outputs"
    GroupWorkflow Audio
        Bonsai.Audio.AudioReader(FileName=bell.wav, BufferLength=0, SampleRate=0)
        -> BehaviorSubject AudioWaveform

        SubscribeSubject GoCue
        -> SelectMany "Play sound"
            SubscribeSubject AudioWaveform
            -> Bonsai.Audio.AudioPlayback(SampleRate=44100, State=Playing)
            -> Last
            -> Take(Count=1)
            -> WorkflowOutput

            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=DOPort0))
            -> MulticastSubject BehaviorCommands

        BehaviorSubject<Bonsai.Harp.HarpMessage> SoundCardCommands
        -> Harp.SoundCard.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COM21)
        -> BehaviorSubject SoundCardEvents

        SubscribeSubject GoCue
        -> Harp.SoundCard.CreateMessage(MessageType=Write, Payload=Harp.SoundCard.CreatePlaySoundOrFrequencyPayload(PlaySoundOrFrequency=4))
        -> MulticastSubject SoundCardCommands

    GroupWorkflow RewardControl
        SubscribeSubject LeftValueSize => #0
        SubscribeSubject LeftValueSize1 => #1
        #0, #1 -> Merge
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject RightValueSize => #5
        SubscribeSubject RightValueSize1 => #6
        #5, #6 -> Merge
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort1)
        -> MulticastSubject BehaviorCommands

        SubscribeSubject ManualWater_Left => #10
        SubscribeSubject RewardDeliveryLeft
        -> IntProperty(Value=0) => #12
        #10, #12 -> Merge
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=SupplyPort0))
        -> MulticastSubject BehaviorCommands

        SubscribeSubject ManualWater_Right => #16
        SubscribeSubject RewardDeliveryRight
        -> IntProperty(Value=0) => #18
        #16, #18 -> Merge
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=SupplyPort1))
        -> MulticastSubject BehaviorCommands

    Harp.Behavior.CreateMessage
      MessageType=Write
      Payload=Harp.Behavior.CreateOutputPulseEnablePayload(OutputPulseEnable="DOPort2 SupplyPort0 SupplyPort1 SupplyPort2 DO0 DO1 DO2 DO3")
    -> MulticastSubject BehaviorCommands

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #5
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO0))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #9
        WorkflowInput Source1
        -> WorkflowOutput
    #9, #5 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/TrialStartTimeHarp)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #16
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO2))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #20
        WorkflowInput Source1
        -> WorkflowOutput
    #20, #16 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/DelayStartTimeHarp)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #27
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DO3))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #31
        WorkflowInput Source1
        -> WorkflowOutput
    #31, #27 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/TrialEndTimeHarp)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #38
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=SupplyPort0))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #42
        WorkflowInput Source1
        -> WorkflowOutput
    #42, #38 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/LeftRewardDeliveryTimeHarp)
    -> MulticastSubject ToBonsaiOSC2

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #49
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=SupplyPort1))
    -> GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Condition => #53
        WorkflowInput Source1
        -> WorkflowOutput
    #53, #49 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Bonsai.Osc.Format(Address=/RightRewardDeliveryTimeHarp)
    -> MulticastSubject ToBonsaiOSC2

    SubscribeSubject GoCue
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DOPort2))
    -> MulticastSubject BehaviorCommands

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDOPort2Payload(PulseDOPort2=5))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject Start
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO0))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject DelayStart
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO2))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject TrialEnd
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputTogglePayload(OutputToggle=DO3))
    -> MulticastSubject BehaviorCommands

    Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePulseDO3Payload(PulseDO3=100))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject BehaviorEvents
    -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedDigitalInputState) => #76
    -> MemberSelector(Selector=Value)
    -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalInputs>(Value=DI3))
    -> Equal(Operand=WorkflowProperty<System.Byte>(Value=0))
    -> DistinctUntilChanged
    -> Condition => #81
        WorkflowInput Source1
        -> WorkflowOutput
    #81, #76 -> WithLatestFrom
    -> MemberSelector(Selector=Item2.Seconds)
    -> PublishSubject ITIEndTime

    Bonsai.Harp.CreateMessage(MessageType=Write, Payload=Bonsai.Harp.CreateMessagePayload(Address=110, PayloadType=U8, Value=4))
    -> MulticastSubject BehaviorCommands

    SubscribeSubject ITI
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it*1000
    -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO0)
    -> MulticastSubject BehaviorCommands

    SubscribeSubject DelayTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it*1000
    -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO2)
    -> MulticastSubject BehaviorCommands

    Disable SubscribeSubject BehaviorEvents
    -> Disable Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedOutputToggle) => #96
    -> Disable MemberSelector(Selector=Value)
    -> Disable BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.DigitalOutputs>(Value=DOPort2))
    -> Disable GreaterThan(Operand=WorkflowProperty<System.UInt16>(Value=0))
    -> Disable Condition => #100
        WorkflowInput Source1
        -> WorkflowOutput
    #100, #96 -> Disable WithLatestFrom
    -> Disable MemberSelector(Selector=Item2.Seconds)
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: new(it as Seconds)
    -> Disable Bonsai.Osc.Format(Address=/GoCueTimeHarp)
    -> Disable MulticastSubject ToBonsaiOSC

    SubscribeSubject SoundCardEvents
    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
    -> Harp.SoundCard.Parse(Register=Harp.SoundCard.TimestampedPlaySoundOrFrequency)
    -> Bonsai.Osc.Format(Address=/GoCueTimeHarp)
    -> MulticastSubject ToBonsaiOSC

GroupWorkflow TrialLogic
    SubscribeSubject Start
    -> Take(Count=1) => #1
    SubscribeSubject ITI
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #4
    #1, #4 -> SelectMany ITI
        WorkflowInput Source1
        -> Equal(Operand=IntProperty(Value=1))
        -> Condition => #2
            WorkflowInput Source1
            -> WorkflowOutput
        ExternalizedMapping(DueTime) => #3
        #2, #3 -> Bonsai.Shaders.Delay(DueTime=PT2.734S)
        -> WorkflowOutput
    -> MulticastSubject DelayStart => #6
    SubscribeSubject DelayTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #9
    #6, #9 -> SelectMany DelayPeriod
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT1S)
        -> BooleanProperty(Value=true) => #3
        SubscribeSubject Licks
        -> BooleanProperty(Value=false) => #5
        #3, #5 -> Merge
        -> Take(Count=1)
        -> Condition "No Licks"
            WorkflowInput Source1
            -> WorkflowOutput
        -> Repeat
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject GoCue => #11
    SubscribeSubject ResponseTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #14
    #11, #14 -> SelectMany ResponseInterval
        ExternalizedMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT1S, Period=PT0S)
        -> StringProperty(Value=NoResponse) => #2
        SubscribeSubject Licks => #3
        #2, #3 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Reward(Description=Reward)
        WorkflowInput Source1 => #0
        -> Condition LickLeft
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #2
            SubscribeSubject IsLeftRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryLeft
            -> StringProperty(Value=RewardLeft) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorLeft) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition LickRight
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #4
            SubscribeSubject IsRightRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryRight
            -> StringProperty(Value=RewardRight) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorRight) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition Miss
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=NoResponse))
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse) => #6
        Source2=#2, Source3=#4, Source5=#6 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject RewardOutcome => #17
    SubscribeSubject RewardConsumeTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.fromSeconds(it)
    -> PropertyMapping(DueTime) => #20
    #17, #20 -> SelectMany RewardConsumeTime
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT3S)
        -> WorkflowOutput
    -> MulticastSubject TrialEnd
    -> Take(Count=1)
    -> Repeat
    -> WorkflowOutput

    SubscribeSubject Start
    -> Take(Count=1)
    -> Equal(Operand=IntProperty(Value=3))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> SelectMany
        SubscribeSubject ITIEndTime
        -> BooleanProperty(Value=true)
        -> WorkflowOutput
    -> MulticastSubject GoCue => #31
    SubscribeSubject ResponseTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.FromSeconds(it)
    -> PropertyMapping(DueTime) => #34
    #31, #34 -> SelectMany ResponseInterval
        ExternalizedMapping(DueTime)
        -> Bonsai.Shaders.Timer(DueTime=PT1S, Period=PT0S)
        -> StringProperty(Value=NoResponse) => #2
        SubscribeSubject Licks => #3
        #2, #3 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> SelectMany Reward(Description=Reward)
        WorkflowInput Source1 => #0
        -> Condition LickLeft
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Left))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #2
            SubscribeSubject IsLeftRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryLeft
            -> StringProperty(Value=RewardLeft) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorLeft) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition LickRight
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=Right))
            -> WorkflowOutput
        -> SelectMany DetermineOutcome => #4
            SubscribeSubject IsRightRewarded => #0
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> MulticastSubject RewardDeliveryRight
            -> StringProperty(Value=RewardRight) => #3
            #0 -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> StringProperty(Value=ErrorRight) => #6
            #3, #6 -> Merge
            -> Take(Count=1)
            -> WorkflowOutput
        #0 -> Condition Miss
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> Equal(Operand=StringProperty(Value=NoResponse))
            -> WorkflowOutput
        -> StringProperty(Value=NoResponse) => #6
        Source2=#2, Source3=#4, Source5=#6 -> Merge
        -> Take(Count=1)
        -> WorkflowOutput
    -> MulticastSubject RewardOutcome => #37
    SubscribeSubject RewardConsumeTime
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: TimeSpan.fromSeconds(it)
    -> PropertyMapping(DueTime) => #40
    #37, #40 -> SelectMany RewardConsumeTime
        WorkflowInput Source1 => #0
        ExternalizedMapping(DueTime) => #1
        #0, #1 -> Bonsai.Shaders.Delay(DueTime=PT3S)
        -> WorkflowOutput
    -> MulticastSubject TrialEnd
    -> Take(Count=1)
    -> Repeat

GroupWorkflow CreateOscClient
    Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC, Port=4002, NoDelay=false, AllowNatTraversal=true)
    Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC2, Port=4003, NoDelay=false, AllowNatTraversal=true)
    Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC3, Port=4004, NoDelay=false, AllowNatTraversal=true)
    Bonsai.Osc.CreateTcpServer(Name=BonsaiOSC4, Port=4005, NoDelay=false, AllowNatTraversal=true)

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC)
    -> PublishSubject FromBonsaiOSC

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC2)
    -> PublishSubject FromBonsaiOSC2

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC4)
    -> PublishSubject FromBonsaiOSC4

    Bonsai.Osc.ReceiveMessage(Address="", TypeTag="", Connection=BonsaiOSC3)
    -> PublishSubject FromBonsaiOSC3

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC, Address="")

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC2
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC2, Address="")

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC3
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC3, Address="")

    BehaviorSubject<Bonsai.Osc.Message> ToBonsaiOSC4
    -> Bonsai.Osc.SendMessage(Connection=BonsaiOSC4, Address="")

GroupWorkflow Init
    BehaviorSubject<System.String> RewardOutcome
    BehaviorSubject<System.Object> RewardDeliveryLeft
    BehaviorSubject<System.Object> RewardDeliveryRight
    BehaviorSubject<System.Object> TrialEnd
    BehaviorSubject<System.Boolean> DelayStart
    BehaviorSubject<System.Boolean> GoCue

    Bonsai.Shaders.CreateWindow
      Width=640
      Height=480
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Hidden
      WindowState=Minimized
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false

Disable Bonsai.IO.StartProcess
  FileName=../../allen_env/scripts/python.exe
  Arguments='"C:\Users\neurogears\Documents\git\AllenND\raw_workflow\dynamic-foraging-task\src\foraging_gui\Foraging.py"'

SubscribeSubject FromBonsaiOSC
-> Bonsai.Osc.Parse(Address=/startlogging, TypeTag=s)
-> Take(Count=1)
-> CreateObservable RestartLoggers
    WorkflowInput Source1
    -> Take(Count=1) => #1
    -> Disable Bonsai.Scripting.Expressions.ExpressionTransform => #2
      Expression: DateTime.Now.ToString("dd_MM_yyyy_HH_mm_ss")
    #1, #2 -> Disable Zip
    -> Disable Format(Format={0}\{1}, Selector="Item1,Item2")
    -> AsyncSubject RootPath

    SubscribeSubject RootPath
    -> Bonsai.Osc.Format(Address=/loggerstarted)
    -> MulticastSubject ToBonsaiOSC

    SubscribeSubject FromBonsaiOSC
    -> Bonsai.Osc.Parse(Address=/stoplogging, TypeTag="")
    -> Take(Count=1)
    -> Disable MulticastSubject ToBonsaiOSC
    -> WorkflowOutput

    SubscribeSubject ToBonsaiOSC
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC)

    SubscribeSubject ToBonsaiOSC2
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC2)

    SubscribeSubject ToBonsaiOSC3
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC3)

    SubscribeSubject ToBonsaiOSC4
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=ToBonsaiOSC4)

    SubscribeSubject FromBonsaiOSC
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC)

    SubscribeSubject FromBonsaiOSC2
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC2)

    SubscribeSubject FromBonsaiOSC3
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC3)

    SubscribeSubject FromBonsaiOSC4
    -> GroupBy(KeySelector=Address)
    -> IncludeWorkflow(Path=Extensions\LogOscDemux.bonsai, LogName=FromBonsaiOSC4)

    SubscribeSubject BehaviorEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDemux.bonsai, LogName=BehaviorEvents)

    Disable SubscribeSubject SideCameraFrames
    -> Disable Bonsai.Harp.CreateTimestamped => #41
    Disable SubscribeSubject RootPath
    -> Disable Format(Format={0}/Video/side_camera.csv, Selector="")
    -> Disable PropertyMapping(FileName) => #44
    #41, #44 -> Disable Bonsai.IO.CsvWriter
      FileName=E:\VideoTmp\2023-09-11_12-36-24/Video/side_camera.csv
      Append=false
      Overwrite=true
      Suffix=None
      IncludeHeader=false
      Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp,Value.ChunkData.Gain,Value.ChunkData.ExposureTime"
    -> Disable MemberSelector(Selector=Value.Image) => #46
    Disable SubscribeSubject RootPath
    -> Disable Format(Format={0}/Video/side_camera.avi, Selector="")
    -> Disable PropertyMapping(FileName) => #49
    #46, #49 -> Disable Bonsai.Vision.VideoWriter
      FileName=E:\VideoTmp\2023-09-11_12-36-24/Video/side_camera.avi
      Suffix=None
      Buffered=true
      Overwrite=true
      FourCC=RAW
      FrameRate=200
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

    SubscribeSubject SoundCardEvents
    -> IncludeWorkflow(Path=Extensions\LogHarpDemux.bonsai, LogName=SoundCardEvents)

    Disable SubscribeSubject BottomCameraFrames
    -> Disable Bonsai.Harp.CreateTimestamped => #54
    Disable SubscribeSubject RootPath
    -> Disable Format(Format={0}/Video/bottom_camera.csv, Selector="")
    -> Disable PropertyMapping(FileName) => #57
    #54, #57 -> Disable Bonsai.IO.CsvWriter
      FileName=E:\VideoTmp\2023-09-11_12-36-24/Video/bottom_camera.csv
      Append=false
      Overwrite=true
      Suffix=None
      IncludeHeader=false
      Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp,Value.ChunkData.Gain,Value.ChunkData.ExposureTime"
    -> Disable MemberSelector(Selector=Value.Image) => #59
    Disable SubscribeSubject RootPath
    -> Disable Format(Format={0}/Video/bottom_camera.avi, Selector="")
    -> Disable PropertyMapping(FileName) => #62
    #59, #62 -> Disable Bonsai.Vision.VideoWriter
      FileName=E:\VideoTmp\2023-09-11_12-36-24/Video/bottom_camera.avi
      Suffix=None
      Buffered=true
      Overwrite=true
      FourCC=RAW
      FrameRate=200
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor
-> Concat
-> Repeat

GroupWorkflow Camera(Description=Camera)
    SubscribeSubject Camerafrequency
    -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera1Frequency)
    -> MulticastSubject BehaviorCommands

    SubscribeSubject Cameracontrol => #3
    -> Equal(Operand=IntProperty(Value=1))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput1))
    -> MulticastSubject BehaviorCommands
    #3 -> Equal(Operand=IntProperty(Value=2))
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput1))
    -> MulticastSubject BehaviorCommands

    Disable Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=21077123, ColorProcessing=Default) => #12
    Disable SubscribeSubject BehaviorEvents
    -> Disable Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
    -> Disable MemberSelector(Selector=Seconds) => #15
    #12, #15 -> Disable Zip
    -> Disable Bonsai.Harp.CreateTimestamped => #17
    Disable SubscribeSubject Bottomcameracsv
    -> Disable PropertyMapping(FileName) => #19
    #17, #19 -> Disable Bonsai.IO.CsvWriter
      FileName=H:\TestImaging\image.csv
      Append=false
      Overwrite=true
      Suffix=None
      IncludeHeader=false
      Selector="Seconds,Value.ChunkData.FrameID,Value.ChunkData.Timestamp,Value.ChunkData.Gain,Value.ChunkData.ExposureTime"
    -> Disable MemberSelector(Selector=Value.Image) => #21
    Disable SubscribeSubject Bottomcamerafile
    -> Disable PropertyMapping(FileName) => #23
    #21, #23 -> Disable Bonsai.Vision.VideoWriter
      FileName=H:\TestImaging\test.avi
      Suffix=None
      Buffered=true
      Overwrite=true
      FourCC=FMP4
      FrameRate=200
      FrameSize(Width=0, Height=0)
      ResizeInterpolation=NearestNeighbor

    Disable Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=23022717, ColorProcessing=Default) => #25
    Disable SubscribeSubject BehaviorEvents
    -> Disable Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
    -> Disable MemberSelector(Selector=Seconds) => #28
    #25, #28 -> Disable Zip
    -> Disable PublishSubject SideCameraFrames

    Disable Bonsai.Spinnaker.SpinnakerCapture(Index=nil, SerialNumber=21077123, ColorProcessing=Default) => #31
    Disable SubscribeSubject BehaviorEvents
    -> Disable Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera1Frame)
    -> Disable MemberSelector(Selector=Seconds) => #34
    #31, #34 -> Disable Zip
    -> Disable PublishSubject BottomCameraFrames

    Disable SubscribeSubject BottomCameraFrames
    -> Disable MemberSelector(Selector=Item1.ChunkData.FrameID)
    -> Disable Bonsai.Dsp.Difference(Order=1)
    -> Disable Subtract(Operand=DoubleProperty(Value=1))
    -> Disable Accumulate

GroupWorkflow CameraBehavior
    Bonsai.Video.VideoCaptureDevice(Index=3, CaptureProperties="")
    -> VisualizerMapping => #1
    Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="")
    -> VisualizerMapping => #3
    StringProperty(Value=bottom)
    -> VisualizerMapping => #5
    StringProperty(Value=side)
    -> VisualizerMapping => #7
    #1, #3, #5, #7 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder Red1(ColumnCount=2, RowCount=2, ColumnStyles="", RowStyles(RowStyle(SizeType=Percent, Height=10)), CellSpans(CellSpan(ColumnSpan=1, RowSpan=1)))
    -> WorkflowOutput
